<?xdl version="0.5.0" ?>

<Synthesis>

  <Hardware>
    <Component
      id="product_flask"
      type="ChemputerFlask" />
    <Component
      id="reactor"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="TBAF (0.1 M in THF)"
      role="reagent" />
    <Reagent
      name="TBAF (1 M in THF)"
      role="reagent" />
    <Reagent
      name="cyclohexenone"
      role="reagent" />
    <Reagent
      name="trifluoromethyltrimethylsilane"
      role="reagent" />
    <Reagent
      name="acetophenone"
      role="reagent" />
    <Reagent
      name="butyrolactone"
      role="reagent" />
    <Reagent
      name="myrtenal"
      role="reagent" />
    <Reagent
      name="reference"
      role="reagent" />
    <Reagent
      name="THF"
      role="reagent"
      use_for_cleaning="True" />
    <Reagent
      name="DCM"
      role="reagent" />
    <Reagent
      name="THF_for_cleaning"
      role="reagent"
      use_for_cleaning="True" />
  </Reagents>

  <Procedure>
    <ResetHandling
      solvent="THF" />
    <OptimizeStep
      id="1"
      optimize_properties="{'volume': {'max_value': 0.3, 'min_value': 0.0}}">
      <Add
        vessel="reactor"
        reagent="cyclohexenone"
        volume="0.2 mL"
        aspiration_speed="2.0"
        port="0"
        stir="True"
        priming_volume="0.4 mL" />
    </OptimizeStep>
    <OptimizeStep
      id="3"
      optimize_properties="{'volume': {'max_value': 0.37, 'min_value': 0.0}}">
      <Add
        vessel="reactor"
        reagent="acetophenone"
        volume="0.23 mL"
        aspiration_speed="2.0"
        port="0"
        stir="True"
        priming_volume="0.3 mL" />
    </OptimizeStep>
    <OptimizeStep
      id="5"
      optimize_properties="{'volume': {'max_value': 0.23, 'min_value': 0.0}}">
      <Add
        vessel="reactor"
        reagent="butyrolactone"
        volume="0.16 mL"
        aspiration_speed="2.0"
        port="0"
        stir="True"
        priming_volume="0.3 mL" />
    </OptimizeStep>
    <OptimizeStep
      id="7"
      optimize_properties="{'volume': {'max_value': 0.45, 'min_value': 0.0}}">
      <Add
        vessel="reactor"
        reagent="myrtenal"
        volume="0.3 mL"
        aspiration_speed="2.0"
        port="0"
        stir="True"
        priming_volume="0.3 mL" />
    </OptimizeStep>
    <OptimizeStep
      id="8"
      optimize_properties="{'volume': {'max_value': 10, 'min_value': 0.0}}">
      <Add
        vessel="reactor"
        reagent="THF"
        volume="5 mL"
        port="0"
        stir="True"
        priming_volume="0.2 mL" />
    </OptimizeStep>
    <ResetHandling
      solvent="THF" />
    <OptimizeStep
      id="10"
      optimize_properties="{'temp': {'max_value': 50.0, 'min_value': 0.0}}">
      <HeatChillToTemp
        vessel="reactor"
        temp="22 °C"
        stir="True"
        stir_speed="450 RPM"
        purpose="reaction" />
    </OptimizeStep>
    <OptimizeStep
      id="11"
      optimize_properties="{'volume': {'max_value': 1.42, 'min_value': 0.36}}">
      <Add
        vessel="reactor"
        reagent="trifluoromethyltrimethylsilane"
        volume="0.9 mL"
        stir="True"
        aspiration_speed="3.0"
        port="0"
        priming_volume="0.2 mL" />
    </OptimizeStep>
    <ResetHandling
      solvent="THF" />
    <OptimizeStep
      id="13"
      optimize_properties="{'volume': {'max_value': 0.8, 'min_value': 0.2}}">
      <Add
        vessel="reactor"
        reagent="TBAF (0.1 M in THF)"
        volume="0.4 mL"
        stir="True"
        aspiration_speed="3.0"
        port="0"
        priming_volume="0.2 mL" />
    </OptimizeStep>
    <ResetHandling
      solvent="THF_for_cleaning" />
    <OptimizeStep
      id="15"
      optimize_properties="{'time': {'max_value': 18000.0, 'min_value': 300.0}}">
      <Stir
        vessel="reactor"
        time="5 min"
        stir_speed="450 RPM" />
    </OptimizeStep>
    <HeatChillToTemp
      vessel="reactor"
      temp="22 °C"
      stir="True"
      stir_speed="450 RPM"
      purpose="reaction"
      continue_heatchill="False" />
    <OptimizeStep
      id="17"
      optimize_properties="{'volume': {'max_value': 6.0, 'min_value': 2.0}}">
      <Add
        vessel="reactor"
        reagent="TBAF (1 M in THF)"
        aspiration_speed="3.0"
        volume="6 mL"
        port="0"
        priming_volume="0.2 mL" />
    </OptimizeStep>
    <ResetHandling
      solvent="THF_for_cleaning" />
    <OptimizeStep
      id="19"
      optimize_properties="{'time': {'max_value': 3600.0, 'min_value': 300.0}}">
      <Stir
        vessel="reactor"
        time="5 min" />
    </OptimizeStep>
    <Add
      vessel="reactor"
      reagent="reference"
      volume="2 mL"
      stir="True"
      port="0"
      aspiration_speed="3.0"
      priming_volume="0.2 mL" />
    <FinalAnalysis
      vessel="reactor"
      method="NMR"
      sample_volume="2.5"
      method_props="{'protocol': '1D FLUORINE HDEC', 'protocol_options': {'centerFrequency': -85, 'PulselengthScale': 1, 'decouplePower': 0, 'AcquisitionTime': 1.64, 'RepetitionTime': 15, 'PulseAngle': 90, 'Number': 64}}"
      force_shimming="True"
      cleaning_solvent="THF" />
    <Transfer
      from_vessel="reactor"
      to_vessel="product_flask"
      aspiration_speed="3.0"
      volume="all"
      from_port="0"
      to_port="0" />
    <ResetHandling
      solvent="THF_for_cleaning" />
    <CleanVessel
      vessel="reactor"
      solvent="THF_for_cleaning"
      temp="22 °C"
      volume="20 mL" />
  </Procedure>

</Synthesis>
