<?xdl version="0.5.0" ?>

<Synthesis>

  <Hardware>
    <Component
      id="product_flask"
      type="ChemputerFlask" />
    <Component
      id="reactor2"
      type="reactor" />
    <Component
      id="product_flask"
      type="ChemputerFlask" />
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="product_flask"
      type="ChemputerFlask" />
    <Component
      id="reactor2"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="benzaldehyde"
      role="reagent" />
    <Reagent
      name="methanol"
      role="reagent" />
    <Reagent
      name="benzylamine"
      role="reagent" />
    <Reagent
      name="fluorobenzoic acid"
      role="reagent" />
    <Reagent
      name="isocyanide"
      role="reagent" />
    <Reagent
      name="DCM"
      role="reagent" />
    <Reagent
      name="reference"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Async
      pid="xdl_block_0">
      <ResetHandling
        solvent="methanol" />
      <Add
        vessel="reactor2"
        reagent="benzaldehyde"
        volume="0.2 mL"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="1"
        optimize_properties="{'volume': {'max_value': 5.0, 'min_value': 0.0}}">
        <Add
          vessel="reactor2"
          reagent="methanol"
          volume="4.8831 mL"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <OptimizeStep
        id="2"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor2"
          reagent="benzylamine"
          volume="0.9489 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="3"
        optimize_properties="{'time': {'max_value': 1800.0, 'min_value': 0.0}}">
        <Stir
          vessel="reactor2"
          time="37.8976 s" />
      </OptimizeStep>
      <OptimizeStep
        id="4"
        optimize_properties="{'volume': {'max_value': 3.0, 'min_value': 0.5}}">
        <Add
          vessel="reactor2"
          reagent="fluorobenzoic acid"
          volume="2.8477 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <Wait
        time="5 min" />
      <OptimizeStep
        id="6"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor2"
          reagent="isocyanide"
          volume="0.9799 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="7"
        optimize_properties="{'temp': {'max_value': 60.0, 'min_value': 25.0}}">
        <HeatChillToTemp
          vessel="reactor2"
          temp="50.7627 °C"
          stir="True"
          purpose="reaction" />
      </OptimizeStep>
      <OptimizeStep
        id="8"
        optimize_properties="{'time': {'max_value': 64800.0, 'min_value': 7200.0}}">
        <Stir
          vessel="reactor2"
          time="4.4366 h" />
      </OptimizeStep>
      <HeatChillToTemp
        vessel="reactor2"
        temp="25 °C"
        continue_heatchill="False"
        stir="True" />
      <Add
        vessel="reactor2"
        reagent="reference"
        volume="5 mL"
        stir="True"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="DCM" />
      <FinalAnalysis
        vessel="reactor2"
        method="NMR"
        sample_volume="2.5"
        method_props="{'protocol': '1D FLUORINE HDEC', 'protocol_options': {'centerFrequency': -110, 'PulselengthScale': 1, 'decouplePower': 0, 'AcquisitionTime': 1.64, 'RepetitionTime': 15, 'PulseAngle': 90, 'Number': 32}}"
        force_shimming="True" />
      <Transfer
        from_vessel="reactor2"
        to_vessel="product_flask"
        volume="all"
        from_port="0"
        to_port="0" />
      <ResetHandling
        solvent="DCM" />
      <CleanVessel
        vessel="reactor2"
        solvent="DCM"
        temp="22 °C"
        volume="15 mL" />
      <Shutdown />
      <Shutdown />
    </Async>
    <Async
      pid="xdl_block_1">
      <Wait
        time="14.2799 min" />
      <ResetHandling
        solvent="methanol" />
      <Add
        vessel="reactor1"
        reagent="benzaldehyde"
        volume="0.2 mL"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="1"
        optimize_properties="{'volume': {'max_value': 5.0, 'min_value': 0.0}}">
        <Add
          vessel="reactor1"
          reagent="methanol"
          volume="5 mL"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <OptimizeStep
        id="2"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor1"
          reagent="benzylamine"
          volume="0.1 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="3"
        optimize_properties="{'time': {'max_value': 1800.0, 'min_value': 0.0}}">
        <Stir
          vessel="reactor1"
          time="30 min" />
      </OptimizeStep>
      <OptimizeStep
        id="4"
        optimize_properties="{'volume': {'max_value': 3.0, 'min_value': 0.5}}">
        <Add
          vessel="reactor1"
          reagent="fluorobenzoic acid"
          volume="3 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <Wait
        time="5 min" />
      <OptimizeStep
        id="6"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor1"
          reagent="isocyanide"
          volume="0.1 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="7"
        optimize_properties="{'temp': {'max_value': 60.0, 'min_value': 25.0}}">
        <HeatChillToTemp
          vessel="reactor1"
          temp="60 °C"
          stir="True"
          purpose="reaction" />
      </OptimizeStep>
      <OptimizeStep
        id="8"
        optimize_properties="{'time': {'max_value': 64800.0, 'min_value': 7200.0}}">
        <Stir
          vessel="reactor1"
          time="18 h" />
      </OptimizeStep>
      <HeatChillToTemp
        vessel="reactor1"
        temp="25 °C"
        continue_heatchill="False"
        stir="True" />
      <Add
        vessel="reactor1"
        reagent="reference"
        volume="5 mL"
        stir="True"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="DCM" />
      <FinalAnalysis
        vessel="reactor1"
        method="NMR"
        sample_volume="2.5"
        method_props="{'protocol': '1D FLUORINE HDEC', 'protocol_options': {'centerFrequency': -110, 'PulselengthScale': 1, 'decouplePower': 0, 'AcquisitionTime': 1.64, 'RepetitionTime': 15, 'PulseAngle': 90, 'Number': 32}}"
        force_shimming="True" />
      <Transfer
        from_vessel="reactor1"
        to_vessel="product_flask"
        volume="all"
        from_port="0"
        to_port="0" />
      <ResetHandling
        solvent="DCM" />
      <CleanVessel
        vessel="reactor1"
        solvent="DCM"
        temp="22 °C"
        volume="15 mL" />
      <Shutdown />
      <Shutdown />
    </Async>
    <Async
      pid="xdl_block_2">
      <Wait
        time="4.8945 h" />
      <ResetHandling
        solvent="methanol" />
      <Add
        vessel="reactor2"
        reagent="benzaldehyde"
        volume="0.2 mL"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="1"
        optimize_properties="{'volume': {'max_value': 5.0, 'min_value': 0.0}}">
        <Add
          vessel="reactor2"
          reagent="methanol"
          volume="94.6556 ul"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <OptimizeStep
        id="2"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor2"
          reagent="benzylamine"
          volume="0.7846 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="3"
        optimize_properties="{'time': {'max_value': 1800.0, 'min_value': 0.0}}">
        <Stir
          vessel="reactor2"
          time="4.0247 min" />
      </OptimizeStep>
      <OptimizeStep
        id="4"
        optimize_properties="{'volume': {'max_value': 3.0, 'min_value': 0.5}}">
        <Add
          vessel="reactor2"
          reagent="fluorobenzoic acid"
          volume="0.7455 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <Wait
        time="5 min" />
      <OptimizeStep
        id="6"
        optimize_properties="{'volume': {'max_value': 1, 'min_value': 0.1}}">
        <Add
          vessel="reactor2"
          reagent="isocyanide"
          volume="0.1823 mL"
          stir="True"
          port="0"
          priming_volume="0.2 mL" />
      </OptimizeStep>
      <ResetHandling
        solvent="methanol" />
      <OptimizeStep
        id="7"
        optimize_properties="{'temp': {'max_value': 60.0, 'min_value': 25.0}}">
        <HeatChillToTemp
          vessel="reactor2"
          temp="58.6818 °C"
          stir="True"
          purpose="reaction" />
      </OptimizeStep>
      <OptimizeStep
        id="8"
        optimize_properties="{'time': {'max_value': 64800.0, 'min_value': 7200.0}}">
        <Stir
          vessel="reactor2"
          time="2.1475 h" />
      </OptimizeStep>
      <HeatChillToTemp
        vessel="reactor2"
        temp="25 °C"
        continue_heatchill="False"
        stir="True" />
      <Add
        vessel="reactor2"
        reagent="reference"
        volume="5 mL"
        stir="True"
        port="0"
        priming_volume="0.2 mL" />
      <ResetHandling
        solvent="DCM" />
      <FinalAnalysis
        vessel="reactor2"
        method="NMR"
        sample_volume="2.5"
        method_props="{'protocol': '1D FLUORINE HDEC', 'protocol_options': {'centerFrequency': -110, 'PulselengthScale': 1, 'decouplePower': 0, 'AcquisitionTime': 1.64, 'RepetitionTime': 15, 'PulseAngle': 90, 'Number': 32}}"
        force_shimming="True" />
      <Transfer
        from_vessel="reactor2"
        to_vessel="product_flask"
        volume="all"
        from_port="0"
        to_port="0" />
      <ResetHandling
        solvent="DCM" />
      <CleanVessel
        vessel="reactor2"
        solvent="DCM"
        temp="22 °C"
        volume="15 mL" />
      <Shutdown />
      <Shutdown />
    </Async>
    <Await
      pid="xdl_block_0" />
    <Await
      pid="xdl_block_1" />
    <Await
      pid="xdl_block_2" />
  </Procedure>

</Synthesis>
